<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:StateMachineDefinition;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-1</Left>
        <Right>1</Right>
        <Bottom>-1</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawCall</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>WaitKey</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="StateMachineDefinition" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:ReadAllText">
          <io:Path>..\Schemas\state-machine.yml</io:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:DeserializeFromYaml">
        <p1:Type xsi:type="TypeMapping" TypeArguments="p1:StateMachine" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StateDefinitions</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GenerateTransitionDictionary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StateDefinitions</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Alias</rx:KeySelector>
              <rx:ElementSelector>it</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>TransitionDictionary</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TransitionDictionary</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="StringProperty">
          <Value>Gratings</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StateDefinition" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>